CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"ChannelCube": "text", "FileLocation": "text", "ImageNo": "text", "Series": "text", "Frame": "text", "Condition": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Condition>.*)_(?P<ChannelCube>.*)_(?P<ImageNo>[0-9]{4})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'RfpOrig': u'Condition', u'DapiOrig': u'Condition'}, {u'RfpOrig': u'ImageNo', u'DapiOrig': u'ImageNo'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelCube "DAPI")
    Name to assign these images:DapiOrig
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelCube "RFP")
    Name to assign these images:RfpOrig
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DapiOrig
    Conversion method:Combine
    Image type:RGB
    Name the output image:DapiGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DapiGray
    Name the output image:DapiIllum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DapiGray
    Name the output image:DapiCorr
    Select the illumination function:DapiIllum
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DapiCorr
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
ColorToGray:[module_num:9|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
    Select the input image:RfpOrig
    Conversion method:Combine
    Image type:RGB
    Name the output image:RfpGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:RfpGray
    Name the output image:RfpIllum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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
    Select the input image:RfpGray
    Name the output image:RfpCorr
    Select the illumination function:RfpIllum
    Select how the illumination function is applied:Divide

Threshold:[module_num:12|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
    Select the input image:RfpCorr
    Name the output image:RfpThr
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:RfpThr
    Name the primary objects to be identified:PiNuclei
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
RelateObjects:[module_num:14|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
    Parent objects:Nuclei
    Child objects:PiNuclei
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:15|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
    Select the objects to filter:Nuclei
    Name the output objects:DeadNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_PiNuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
CalculateMath:[module_num:16|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
    Name the output measurement:Measurement
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_DeadNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|PI viability/23 9 72h/841 HFP IFNa IFNg
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:PI_
    Overwrite existing files without warning?:No
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