CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Condition>.*)_(?P<ChannelCube>.*)_(?P<ImageNo>[0-9]{4})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'RgbOrig': u'Condition', u'DapiOrig': u'Condition', u'TransOrig': u'Condition', u'GfpOrig': u'Condition', u'RfpOrig': u'Condition'}, {u'RgbOrig': u'ImageNo', u'TransOrig': u'ImageNo', u'RfpOrig': u'ImageNo', u'GfpOrig': u'ImageNo', u'DapiOrig': u'ImageNo'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelCube "DAPI")
    Name to assign these images:DapiOrig
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelCube "RFP")
    Name to assign these images:RfpOrig
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelCube "GFP")
    Name to assign these images:GfpOrig
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelCube "TRANS")
    Name to assign these images:TransOrig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelCube "RGB")
    Name to assign these images:RgbOrig
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Condition

ColorToGray:[module_num:5|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
    Select the input image:DapiOrig
    Conversion method:Combine
    Image type:RGB
    Name the output image:DapiGray
    Relative weight of the red channel:0
    Relative weight of the green channel:0
    Relative weight of the blue channel:1.0
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DapiGray
    Name the output image:DapiIllum
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:40
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DapiGray
    Name the output image:DapiCorr
    Select the illumination function:DapiIllum
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DapiCorr
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
ColorToGray:[module_num:9|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
    Select the input image:GfpOrig
    Conversion method:Combine
    Image type:RGB
    Name the output image:GfpGray
    Relative weight of the red channel:0
    Relative weight of the green channel:1
    Relative weight of the blue channel:0
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:GfpGray
    Name the output image:GfpIllum
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:40
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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
    Select the input image:GfpGray
    Name the output image:GfpCorr
    Select the illumination function:GfpIllum
    Select how the illumination function is applied:Divide

ColorToGray:[module_num:12|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
    Select the input image:RfpOrig
    Conversion method:Combine
    Image type:RGB
    Name the output image:RfpGray
    Relative weight of the red channel:1
    Relative weight of the green channel:0
    Relative weight of the blue channel:0
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
CorrectIlluminationCalculate:[module_num:13|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
    Select the input image:RfpGray
    Name the output image:RfpIllum
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:40
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:14|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
    Select the input image:RfpGray
    Name the output image:RfpCorr
    Select the illumination function:RfpIllum
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:15|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
    Select the input image:TransOrig
    Name the output image:TransIllum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:16|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
    Select the input image:TransOrig
    Name the output image:TransCorr
    Select the illumination function:TransIllum
    Select how the illumination function is applied:Divide

EnhanceEdges:[module_num:17|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
    Select the input image:TransCorr
    Name the output image:TransEdge
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
IdentifySecondaryObjects:[module_num:18|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:TransEdge
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:3.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectIntensity:[module_num:19|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
    Hidden:2
    Select an image to measure:GfpCorr
    Select an image to measure:RfpCorr
    Select objects to measure:Cells

ClassifyObjects:[module_num:20|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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:Cells
    Select the first measurement:Intensity_UpperQuartileIntensity_GfpCorr
    Method to select the cutoff:Custom
    Enter the cutoff value:0.1
    Select the second measurement:Intensity_UpperQuartileIntensity_RfpCorr
    Method to select the cutoff:Custom
    Enter the cutoff value:0.3
    Use custom names for the bins?:Yes
    Enter the low-low bin name:ZikNegIfitNeg
    Enter the low-high bin name:ZikNegIfitPos
    Enter the high-low bin name:ZikPosIfitNeg
    Enter the high-high bin name:ZikPosIfitPos
    Retain an image of the classified objects?:No
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
FilterObjects:[module_num:21|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
    Select the objects to filter:Cells
    Name the output objects:ZNIN
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Classify_ZikNegIfitNeg
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:22|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
    Select the objects to filter:Cells
    Name the output objects:ZNIP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Classify_ZikNegIfitPos
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:23|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
    Select the objects to filter:Cells
    Name the output objects:ZPIN
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Classify_ZikPosIfitNeg
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:24|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
    Select the objects to filter:Cells
    Name the output objects:ZPIP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Classify_ZikPosIfitPos
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
GrayToColor:[module_num:26|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
    Select a color scheme:RGB
    Select the image to be colored red:RfpCorr
    Select the image to be colored green:GfpCorr
    Select the image to be colored blue:DapiCorr
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:RgbOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#CCCCCB
    Select objects to display:ZNIN
    Select outline color:Green
    Select objects to display:ZPIN
    Select outline color:#FB0106
    Select objects to display:ZNIP
    Select outline color:Yellow
    Select objects to display:ZPIP
